PsychoPy2experiment version="2021.2.3"
Settings
  Experiment info = {'participant':'', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = psychophysicsHKA
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Routines
  Routine practice
    SoundComponent sound_p
      sound [set every repeat] = $stimFile
      startVal [time (s)] = 0
      stopVal [duration (s)] = 2
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    ImageComponent fixation
      image [set every repeat] = volumeicon.png
      size = (0.5, 0.5)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 2
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    KeyboardComponent key_resp
      allowedKeys [set every repeat] = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0
      stopVal [duration (s)] = 1.5
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  Routine task
    SoundComponent sound_1
      sound [set every repeat] = $stimFile
      startVal [time (s)] = 0
      stopVal [duration (s)] = 2
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    ImageComponent fix
      image [set every repeat] = volumeicon.png
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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    KeyboardComponent key_resp_2
      allowedKeys [set every repeat] = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0
      stopVal [duration (s)] = 1.5
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  Routine rate
    TextComponent text_4
      letterHeight = 0.1
      pos = (0, 2)
      startVal [time (s)] = 0
      text = Rate the sound intensity
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    SliderComponent slider_2
      color = black
      forceEndRoutine = True
      granularity = 1
      labels = 0,1,2,3,4
      letterHeight = 0.1
      size = (1.0, 0.1)
      startVal [time (s)] = 0
      styles = rating
      ticks = (0,1,2,3,4)
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  Routine Welcome
    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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      text:
        Welcome!

        In this experiment you will hear several sounds.

        Click the spacebar as fast as you can when you hear the sound.

        DO NOT respond if you don't hear anything.
  Routine Instructions
    TextComponent text_2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        We will now start the experiment.

        Click the spacebar as fast as you can when you hear the sound.

        If you don't hear anything do not respond.

        After that, rate the sound intensity using the following scales:

        0 = No sound
        1 = Barely
        2 = Low
        3 = Medium
        4 = High

        Press SPACEBAR to start
    KeyboardComponent key_resp_3
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Practice_instr
    TextComponent text_3
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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      text:
        We will now run a practice trial

        Press 'spacebar' when you hear a sound
  Routine Thanks
    TextComponent text_5
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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      text:
        That is the end of the experiment

        Thank you for participating

        Have a nice day!
Flow
  Routine Welcome
  Routine Practice_instr
  LoopInitiator prac_trials loopType="TrialHandler"
    conditionsFile = audio_conditions.csv
    loopType = random
    nReps = 2
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    conditions:
      [OrderedDict([('trial', 1), ('response', 'go'), ('stimFile', 'piano_min20db.wav')]),
      OrderedDict([('trial', 2), ('response', 'go'), ('stimFile', 'piano_min30db.wav')]),
      OrderedDict([('trial', 3), ('response', 'go'), ('stimFile', 'piano_min40db.wav')]),
      OrderedDict([('trial', 4), ('response', 'go'), ('stimFile', 'piano_min50db.wav')]),
      OrderedDict([('trial', 5), ('response', 'nogo'), ('stimFile', 'silent.wav')]),
      OrderedDict([('trial', 6), ('response', 'nogo'), ('stimFile', 'silent.wav')]),
      OrderedDict([('trial', 7), ('response', 'nogo'), ('stimFile', 'silent.wav')]),
      OrderedDict([('trial', 8), ('response', 'nogo'), ('stimFile', 'silent.wav')])]
    Routine practice
  LoopTerminator prac_trials
  Routine Instructions
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = audio_conditions.csv
    loopType = random
    nReps = 8
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    conditions:
      [OrderedDict([('trial', 1), ('response', 'go'), ('stimFile', 'piano_min20db.wav')]),
      OrderedDict([('trial', 2), ('response', 'go'), ('stimFile', 'piano_min30db.wav')]),
      OrderedDict([('trial', 3), ('response', 'go'), ('stimFile', 'piano_min40db.wav')]),
      OrderedDict([('trial', 4), ('response', 'go'), ('stimFile', 'piano_min50db.wav')]),
      OrderedDict([('trial', 5), ('response', 'nogo'), ('stimFile', 'silent.wav')]),
      OrderedDict([('trial', 6), ('response', 'nogo'), ('stimFile', 'silent.wav')]),
      OrderedDict([('trial', 7), ('response', 'nogo'), ('stimFile', 'silent.wav')]),
      OrderedDict([('trial', 8), ('response', 'nogo'), ('stimFile', 'silent.wav')])]
    Routine task
    Routine rate
  LoopTerminator trials
  Routine Thanks
